PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['movie'], expName, expInfo['date'])
  Experiment info = {'participant': 'Damy001', 'movie': 'budapest_trailer_DRC', 'volume': '50'}
  Full-screen window = True
  Monitor = hPrisma Projector
  Save hdf5 file = True
  Screen = 2
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1280, 960]
  color = black
  expName = MovieWithEyetracking
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine instr
    TextboxComponent instructions
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        The movie will start in a few moments

        Waiting for scanner ...
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine et_instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        - Eye Tracker Setup -

        Please stare at the moving dots when they appear

        Press Button 1 to continue
    KeyboardComponent et_continue
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play_movie
    EyetrackerRecordComponent et_record
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    MovieComponent movie_player
      backend = moviepy
      disabled = True
      forceEndRoutine = True
      movie = $"expInfo['movie']" + ".mp4"
      size = [36.0, 20.3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = cm
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    CodeComponent et_pos
      Code Type = Py
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      Begin Routine:
        t_prev = -1
      Each Frame:
        if t - t_prev > 0.1:
            print(f"{t} : {et_record.pos}")
            t_prev = t
  Routine post_movie
    TextComponent thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thanks for watching!
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    disabled = True
    expandDur = 1
    expandScale = 1.25
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    disabled = True
    expandDur = 1
    expandScale = 1.25
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
Flow
  Routine et_instructions
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine instr
  Routine play_movie
  Routine post_movie
